CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:10
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:OrigGreen
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ImageMath:[module_num:5|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notes:['Invert image - dark nuclei become bright for proper segmentation']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
    Operation:Invert
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:GreenChannel
    Image or measurement?:Image
    Select the first image:OrigGreen
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Identify nuclei - now bright after inversion. Diameter 15-80 based on analysis.']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
    Select the input image:GreenChannel
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):30,200
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifySecondaryObjects:[module_num:7|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notes:['Identify cells - expands from nuclei. For oil immersion (nucleus only), cell~nucleus. For brightfield, expands to cytoplasm.']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:GreenChannel
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    Regularization factor:0.01
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:FilteredNuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.0
    Threshold correction factor:0.8
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:100
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    Thresholding method:Otsu

MeasureObjectSizeShape:[module_num:8|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notes:['Measure size and shape of both nuclei and cells']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
    Select object sets to measure:Cells, Nuclei
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

MeasureObjectIntensity:[module_num:9|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notes:['Measure intensity on ORIGINAL (non-inverted) image for proper IOD']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
    Select images to measure:OrigGreen
    Select objects to measure:Nuclei

ExportToSpreadsheet:[module_num:10|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notes:['Export all measurements to CSV files']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:Yes
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:Yes
    Calculate the per-image standard deviation values for object measurements?:Yes
    Output file location:Default Output Folder|output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Measurements_
    Overwrite existing files without warning?:Yes
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